PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Delay Discounting experiment
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Routines
  Routine trial
    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today or GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine Introduction
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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      text:
        Welcome.
        You will be presented with two choices of rewards. Press the key ’t’ if you choose the reward offered ‘today’, or press the key ‘l’ if you choose the reward that is offered ‘later’.
  Routine Thanks
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thank You
Flow
  Routine Introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/devanshipatel/Downloads/Conditions_Delay discounting - Sheet1.csv
    loopType = random
    nReps = 14
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    conditions:
      [OrderedDict([('reward_today', 11), ('future_reward', 30), ('delay', 7)]),
      OrderedDict([('reward_today', 15), ('future_reward', 35), ('delay', 13)]),
      OrderedDict([('reward_today', 27), ('future_reward', 50), ('delay', 21)]),
      OrderedDict([('reward_today', 40), ('future_reward', 55), ('delay', 62)]),
      OrderedDict([('reward_today', 49), ('future_reward', 60), ('delay', 89)]),
      OrderedDict([('reward_today', 67), ('future_reward', 75), ('delay', 119)]),
      OrderedDict([('reward_today', 78), ('future_reward', 80), ('delay', 162)])]
    Routine trial
  LoopTerminator trials
  Routine Thanks
