PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Motor sequence learning experiment
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = grey
      lineColor = grey
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent line1
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line3
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line4
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probe
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size [set every repeat] = (10, 10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine Introduction
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
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      text:
        Welcome.
        4 bars would be presented on the screen, each corresponding to the ‘z’, ‘x’, ‘c’, and ‘v’ keys on the keyboard respectively. You will see a triangle on one of bars present. Press the correct key corresponding to the bar which has a triangle on top.
  Routine Thanks
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you.
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Flow
  Routine Introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/devanshipatel/Downloads/Conditions_MSL_Devanshi Patel - Sheet1.csv
    loopType = sequential
    nReps = 100
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    conditions:
      [OrderedDict([('pos', -150), ('corr_resp', 'z')]),
      OrderedDict([('pos', -50), ('corr_resp', 'x')]),
      OrderedDict([('pos', 50), ('corr_resp', 'c')]),
      OrderedDict([('pos', 150), ('corr_resp', 'v')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = /Users/devanshipatel/Downloads/Conditions_MSL_Devanshi Patel - Sheet1.csv
    loopType = fullRandom
    nReps = 100
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    conditions:
      [OrderedDict([('pos', -150), ('corr_resp', 'z')]),
      OrderedDict([('pos', -50), ('corr_resp', 'x')]),
      OrderedDict([('pos', 50), ('corr_resp', 'c')]),
      OrderedDict([('pos', 150), ('corr_resp', 'v')])]
    Routine trial
  LoopTerminator trials_2
  Routine Thanks
