PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Visual Oddball_Solo project
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    TextComponent text_4
      letterHeight = 0.2
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $letter
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    KeyboardComponent resp
      allowedKeys [set every repeat] = 'space'
      correctAns = $correct_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 1.0
      storeCorrect = True
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  Routine Instructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Welcome. You will be presented with some letters. Press the spacebar when you see the letter ‘O’. Do not press any key for any other letter.
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  Routine Thanks
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank You
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions_SP_Visual oddball - Sheet1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('letter', 'Q'), ('stimType', 'standard'), ('correct_resp', None)]),
      OrderedDict([('letter', 'Q'), ('stimType', 'standard'), ('correct_resp', None)]),
      OrderedDict([('letter', 'Q'), ('stimType', 'standard'), ('correct_resp', None)]),
      OrderedDict([('letter', 'Q'), ('stimType', 'standard'), ('correct_resp', None)]),
      OrderedDict([('letter', 'Q'), ('stimType', 'standard'), ('correct_resp', None)]),
      OrderedDict([('letter', 'Q'), ('stimType', 'standard'), ('correct_resp', None)]),
      OrderedDict([('letter', 'Q'), ('stimType', 'standard'), ('correct_resp', None)]),
      OrderedDict([('letter', 'Q'), ('stimType', 'standard'), ('correct_resp', None)]),
      OrderedDict([('letter', 'Q'), ('stimType', 'standard'), ('correct_resp', None)]),
      OrderedDict([('letter', 'Q'), ('stimType', 'standard'), ('correct_resp', None)]),
      OrderedDict([('letter', 'Q'), ('stimType', 'standard'), ('correct_resp', None)]),
      OrderedDict([('letter', 'Q'), ('stimType', 'standard'), ('correct_resp', None)]),
      OrderedDict([('letter', 'Q'), ('stimType', 'standard'), ('correct_resp', None)]),
      OrderedDict([('letter', 'Q'), ('stimType', 'standard'), ('correct_resp', None)]),
      OrderedDict([('letter', 'Q'), ('stimType', 'standard'), ('correct_resp', None)]),
      OrderedDict([('letter', 'Q'), ('stimType', 'standard'), ('correct_resp', None)]),
      OrderedDict([('letter', 'Q'), ('stimType', 'standard'), ('correct_resp', None)]),
      OrderedDict([('letter', 'Q'), ('stimType', 'standard'), ('correct_resp', None)])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
    Routine trial
  LoopTerminator trials
  Routine Thanks
