PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Visual Search experiment
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent target
      letterHeight = 0.1
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = T
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5:
            num_distr = 10
            thisExp.addData('num_distr', num_distr)
        else:
            num_distr = 5
            thisExp.addData('num_distr', num_distr)

        distractors = []

        for i in range(num_distr):
            distr = visual.TextStim(win=win,
                name='distr',
                text='L',
                font='Open Sans',
                pos=(random() - 0.5, random() - 0.5),
                height=0.1,
                wrapWidth=None,
                ori=randint(1, 360),
                color='white',
                colorSpace='rgb',
                opacity=None,
                languageStyle='LTR',
                depth=-2.0)

            distractors.append(distr)

        for distr in distractors:
            distr.setAutoDraw(True)
      End Routine:
        for distr in distractors:
            distr.setAutoDraw(False)
    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine Introduction
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Welcome.
        Among the distractors, find the target T and click on it.
  Routine Thanks
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank You
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Flow
  Routine Introduction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
  LoopTerminator trials
  Routine Thanks
