PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Word Priming Experiment
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Routines
  Routine Study_Phase
    TextComponent StudyText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent Studyslider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Test_Phase
    TextComponent Testtext
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    TextComponent submit_text
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Click to Submit
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    MouseComponent testmouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine Introduction
    TextComponent Intro
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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      text:
        Welcome.
        You will be provided with some words, mention how familiar they are. Then fill up the blank spaces to the words that come up on the screen.
  Routine Thanks
    TextComponent Thakstext
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank You
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Flow
  Routine Introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/devanshipatel/Downloads/Word priming_Conditions_1 - Sheet1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Study_word', 'book')]),
      OrderedDict([('Study_word', 'cushion')]),
      OrderedDict([('Study_word', 'phone')]),
      OrderedDict([('Study_word', 'marble')]),
      OrderedDict([('Study_word', 'board ')]),
      OrderedDict([('Study_word', 'Laptop')]),
      OrderedDict([('Study_word', 'Chart ')]),
      OrderedDict([('Study_word', 'T-shirt')]),
      OrderedDict([('Study_word', 'mouse')]),
      OrderedDict([('Study_word', 'Pastry')]),
      OrderedDict([('Study_word', 'Case')]),
      OrderedDict([('Study_word', 'Cruise')]),
      OrderedDict([('Study_word', 'Police')]),
      OrderedDict([('Study_word', 'Keys')]),
      OrderedDict([('Study_word', 'Poster')])]
    Routine Study_Phase
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = /Users/devanshipatel/Downloads/Word priming_Conditions_2 - Sheet1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test_word', 'L_pt_p'), ('Reference', 'Laptop'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ha_t'), ('Reference', 'Chart'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'T_hi_t'), ('Reference', 'Tshirt'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ou_se'), ('Reference', 'Mouse'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'P_as_tr_'), ('Reference', 'Pastry'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'C_s_'), ('Reference', 'Case'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ru_is_'), ('Reference', 'Cruise'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'P_li_e'), ('Reference', 'Police'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'K_y_'), ('Reference', 'Keys'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'P_st_r'), ('Reference', 'Poster'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_o_rd'), ('Reference', 'Board'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_a_bl_'), ('Reference', 'Marble'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ho_e'), ('Reference', 'Phone'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_oo_'), ('Reference', 'Book'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'c_s_io_'), ('Reference', 'Cushion'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'ta_l_'), ('Reference', 'Table'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'p_nc_l'), ('Reference', 'Pencil'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'V_s_'), ('Reference', 'Vase'), ('old_new', 'new')])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
    Routine Test_Phase
  LoopTerminator trials_2
  Routine Thanks
